PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '["1", "2", "3", "4", "5", "6", "7", "8", "OS-1", "OS-2", "OS-3", "OS-4", "OS-5", "OS-6", "OS-7", "OS-8", "pilot-1", "pilot-2", "pilot-3", "pilot-4", "pilot-5", "pilot-6", "pilot-7", "pilot-8"]', 'session': '["ses-1", "ses-2", "ses-3", "ses-4", "ses-5", "ses-6", "ses-7", "ses-8"]', 'startFromRun': '["1", "2"]', 'mode': '["scan", "orientation", "pilot"]', 'practice': '["no", "yes"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1728, 1117]
  color = $[-1,-1,-1]
  expName = RL_multises
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine getReady
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    TextComponent getReadyText
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Get Ready!
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    KeyboardComponent advanceToTrigger
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setRunFiles
      Code Type = Auto->JS
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      Begin Experiment:
        trialOrder = None
      Begin Routine:
        print(Runs)
        if expInfo["startFromRun"] == "1":
            if Runs == 'Run1':
                trialOrder = milConditionsFile1
            if Runs == 'Run2':
                trialOrder = milConditionsFile2
        else:
            if Runs == 'Run1':
                trialOrder = milConditionsFile1 #which has been set to 2 earlier
  Routine waitForScanner
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    TextComponent waitScannerText
      disabled = True
      letterHeight = 1
      pos = (0, 9)
      startVal [time (s)] = 0.0
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      text:
        Get Ready for the Choice Game!

        You will see these choices:
    CodeComponent waitScannerCode
      Code Type = Auto->JS
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      Begin Experiment:
        waitForScannerClock = core.Clock()
        fmriClock = core.Clock()
        trigger = 'usb'



        '''
        #trigger = 'parallel'
        if trigger == 'parallel':
            from psychopy.contrib import parallel as winioport
            #from psychopy import parallel

        #import is failing
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan
            #
            # settings for launchScan:
            MR_settings = {
                'TR': 2, # duration (sec) per volume
                'volumes': 215, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
        '''
      Begin Routine:
        #skip scanner trigger if
        if(expInfo["mode"] != "scan"):
            continueRoutine = False

        '''
        if expInfo['mriMode'] != 'Off':
            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                globalClock=fmriClock,
                mode=expInfo['mriMode'])
            elif trigger == 'parallel':
                address = 0x378
                #parallel.setPortAddress(0x378)
                wait_msg = "Waiting for scanner..."
                pinStatus = winioport.inp(address)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != winioport.inp(address):
                        break
                        # start exp when pin values change
                fmriClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received

        expInfo['triggerWallTime'] = time.ctime()

        '''
      End Routine:
        #routineTimer.reset()
        fmriClock.reset()
    KeyboardComponent scannerTriggerKey
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent frameOnCode
      Code Type = Auto->JS
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      Begin Experiment:
        frame = visual.Rect(
            win=win, name='frame1',
            width=(20,13)[0], height=(20,13)[1],
            ori=0.0, pos=(0, 0), draggable=False, anchor='center',
            lineWidth=4.0,
            colorSpace='rgb', lineColor='white', fillColor=None,
            opacity=None, depth=-3.0, interpolate=True)
      End Routine:
        frame.setAutoDraw(True)
    ImageComponent sumTemplate
      image = summary.png
      size = (35, 18)
      startVal [time (s)] = 0.0
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    CodeComponent setImg
      Code Type = Auto->JS
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      Begin Routine:
        hg1Img = 'stimuli_sets/' + cuePairs['highgain']['optimalChoice']
        hg2Img = 'stimuli_sets/' + cuePairs['highgain']['suboptimalChoice']

        lg1Img = 'stimuli_sets/' + cuePairs['lowgain']['suboptimalChoice']
        lg2Img = 'stimuli_sets/' + cuePairs['lowgain']['optimalChoice']

        hl1Img = 'stimuli_sets/' + cuePairs['highloss']['suboptimalChoice']
        hl2Img = 'stimuli_sets/' + cuePairs['highloss']['optimalChoice']

        ll1Img = 'stimuli_sets/' + cuePairs['lowloss']['optimalChoice']
        ll2Img = 'stimuli_sets/' + cuePairs['lowloss']['suboptimalChoice']
    ImageComponent hg1
      image [set every repeat] = $hg1Img
      pos = (-9.5, 1)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent hg2
      image [set every repeat] = $hg2Img
      pos = (-5.5, 1)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent lg1
      image [set every repeat] = $lg1Img
      pos = (-9.5, -5.3)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent lg2
      image [set every repeat] = $lg2Img
      pos = (-5.5, -5.3)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent hl1
      image [set every repeat] = $hl1Img
      pos = (9.5, 1)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent hl2
      image [set every repeat] = $hl2Img
      pos = (5.5, 1)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent ll1
      image [set every repeat] = $ll1Img
      pos = (9.5, -5.3)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    ImageComponent ll2
      image [set every repeat] = $ll2Img
      pos = (5.5, -5.3)
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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  Routine summaryDirections
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    TextComponent summary
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Directions to remember:

        1. Try to choose the picture that gives you the best chance of winning money and avoiding losing money.

        2. Press the left button with your POINTER finger to select the image on the left side of the screen. Press the right button with your MIDDLE finger to select the image on the right side of the screen.

        3. The pictures will sometimes appear on opposite sides of the screen. This does not change whether they will win or lose.

        4. Make your choice when you see the pictures. If you choose after that, your response won't be counted.

        5. The money that you win in this task will be YOURS TO KEEP.
    CodeComponent conditionsFiles
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        #load img set
        if(not("pilot" in expInfo["participant"]) and not("OS" in expInfo["participant"])):
            sets = pd.read_csv("stimuli_sets/which_set.csv")
            imgSet = sets.loc[sets['Participant'] == int(expInfo["participant"]), expInfo["session"]].values[0]

        else:
            if("pilot" in expInfo["participant"]):
                id_num = int(expInfo["participant"][6:])
            else:
                id_num = int(expInfo["participant"][3:])
                id_num = int(expInfo["participant"][3:])
            imgSet = "set" + str(id_num)
        #load conditions
        if expInfo["startFromRun"] == "1":
            milConditionsFile1 = 'conditions/MIL_stakes_cond' + version + '_block1.csv'
            milConditionsFile2 = 'conditions/MIL_stakes_cond' + version + '_block2.csv'
        else:
            milConditionsFile1 = 'conditions/MIL_stakes_cond' + version + '_block2.csv'
            milConditionsFile2 = ''
        logging.exp("Using conditions file 1: %s" % milConditionsFile1)
        logging.exp("Using conditions file 2: %s" % milConditionsFile2)
    KeyboardComponent advanceScreenPress4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent summaryLeftCode
      Code Type = Auto->JS
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      Begin Routine:
        summary.alignText = 'left'
  Routine gainDirs
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    KeyboardComponent advanceScreenPress3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent gainDirText
      letterHeight = 1
      pos = (-6, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Sometimes you can win money during the game!

        For the HIGH WIN pair, you can win \$1.00 if you are correct or win \$0.00 if you are incorrect.

        For the LOW WIN pair, you can win \$0.20 if you are correct or win \$0.00 if you are incorrect.

        There will be a box around the pictures. The numbers in the box will tell you whether you can win a high or low amount.

        The money you win will be paid to you as bonus at the end of the game, so try your best!
    PolygonComponent highgainframe
      fillColor = None
      lineColor [set every repeat] = white
      pos = (10, 8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    PolygonComponent lowgainframe
      fillColor = None
      lineColor [set every repeat] = white
      pos = (10, -8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    TextComponent highgainTopLabel
      letterHeight = .7
      pos = (10, 10.5)
      startVal [time (s)] = 0.0
      text = +$1.00
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    TextComponent lowgainTopLabel
      letterHeight = .7
      pos = (10, -5.5)
      startVal [time (s)] = 0.0
      text = +$0.20
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    TextComponent highgainBottomLabel
      letterHeight = .7
      pos = (10, 5.5)
      startVal [time (s)] = 0.0
      text = +$0.00
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    TextComponent lowgainBottomLabel
      letterHeight = 0.7
      pos = (10, -10.5)
      startVal [time (s)] = 0.0
      text = +$0.00
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    TextComponent highGainLabel
      letterHeight = 1
      pos = (10, 8)
      startVal [time (s)] = 0.0
      text = HIGH GAIN
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    TextComponent lowGainLabel
      letterHeight = 1
      pos = (10, -8)
      startVal [time (s)] = 0.0
      text = LOW GAIN
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    CodeComponent gainDirText_2
      Code Type = Auto->JS
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      Begin Routine:
        gainDirText.alignText = 'left'
  Routine lossDirs
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    KeyboardComponent advanceScreen4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lossDirText
      letterHeight = 1
      pos = (-6, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Sometimes you can lose money during the game!

        For the HIGH LOSE pair, you can lose \$0.00 if you are correct or lose \$1.00 if you are incorrect.

        For the LOW LOSE pair, you can lose \$0.00 if you are correct or lose \$0.20 if you are incorrect.

        There will be a box around the pictures. The numbers in the box will tell you whether you can lose a high or low amount.

        The money you lose will be taken away from the bonus money you win at the end of the game, so try your best!
    PolygonComponent highLossFrame
      fillColor = None
      lineColor [set every repeat] = white
      pos = (10, 8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    PolygonComponent lowLossFrame
      fillColor = None
      lineColor [set every repeat] = white
      pos = (10, -8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    TextComponent highLossTopLabel
      letterHeight = .7
      pos = (10, 10.5)
      startVal [time (s)] = 0.0
      text = -$0.00
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    TextComponent lowLossTopLabel
      letterHeight = .7
      pos = (10, -5.5)
      startVal [time (s)] = 0.0
      text = -$0.00
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    TextComponent highLossBottomLabel
      letterHeight = .7
      pos = (10, 5.5)
      startVal [time (s)] = 0.0
      text = -$1.00
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    TextComponent lowLossBottomLabel
      letterHeight = 0.7
      pos = (10, -10.5)
      startVal [time (s)] = 0.0
      text = -$0.20
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    TextComponent highLossLabel
      letterHeight = 1
      pos = (10, 8)
      startVal [time (s)] = 0.0
      text = HIGH LOSE
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    TextComponent lowLossLabel
      letterHeight = 1
      pos = (10, -8)
      startVal [time (s)] = 0.0
      text = LOW GAIN
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    CodeComponent lossTextCode
      Code Type = Auto->JS
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      Begin Routine:
        lossDirText.alignText = 'left'
    CodeComponent framePracOn
      Code Type = Auto->JS
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      Begin Experiment:
        frame = visual.Rect(
            win=win, name='frame1',
            width=(20,13)[0], height=(20,13)[1],
            ori=0.0, pos=(0, 0), draggable=False, anchor='center',
            lineWidth=4.0,
            colorSpace='rgb', lineColor='white', fillColor=None,
            opacity=None, depth=-3.0, interpolate=True)
      End Routine:
        frame.setAutoDraw(True)
  Routine routine_1
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  Routine breakScreen
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    TextComponent breakText
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = You finished this round!
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    KeyboardComponent advanceScreenPress_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endRunTime
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('runOffTime', fmriClock.getTime())
        if(expInfo["startFromRun"] == "2"):
            print("trying to end loop")
            trials.finished = True
            runs.finished = True
            continueRoutine = False  #add this line to end the current routine early
        else:
            if runs.thisN == 1:
                continueRoutine = False
        #if expInfo["startFromRun"] == "2":
        #   print("trying to end this damn round")
        #   #continueRoutine = False
        #   runs.finished == True
    CodeComponent frameOffCode
      Code Type = Auto->JS
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      Begin Routine:
        frame.setAutoDraw(False)
  Routine fixation
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    TextComponent fixationCrosshair
      durationEstim = 2.99
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationDuration
      text = +
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    CodeComponent loopDurationCode
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('fixationTime', fmriClock.getTime())
      End Routine:
        logging.exp("Measured Fixation Dureation: %f" % t)
        logging.exp("Trials Clock: %f" % trialsClock.getTime())
    PolygonComponent frameFix
      disabled = True
      durationEstim = 2.99
      fillColor = None
      lineWidth = 4
      shape = rectangle
      size = (20,13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationDuration
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  Routine cue
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    TextComponent startFixStatic
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent leftCue
      image [set during: cue.staticISI] = $leftImage
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    ImageComponent rightCue
      image [set during: cue.staticISI] = $rightImage
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent cueResp
      allowedKeys = allowedKeys
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    CodeComponent setCues
      Code Type = Auto->JS
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      Begin Experiment:
        import json
        jsonfile = 'Subject_Data/' + expInfo['participant'] + '_' + expInfo['session'] +'.json'
        # Assign Cues to Condition or load previous set.
        if(os.path.exists(jsonfile)):
            with open(jsonfile,'r') as f:
                cuePairs = json.load(f)
        else:
            imageList = 'conditions/'+ 'PicList_'+ version + '.csv'
            print(imageList)
            with open(imageList, 'r') as f:
                allImages=[s.strip() for s in f.readlines()]
                cuePairs = {
                    'highgain': {'optimalChoice': imgSet + '_' + allImages[0], 'suboptimalChoice': imgSet + '_' +  allImages[1]},
                    'lowgain': {'optimalChoice': imgSet + '_' + allImages[2], 'suboptimalChoice': imgSet + '_' + allImages[3]},
                    'highloss': {'optimalChoice': imgSet + '_' + allImages[4], 'suboptimalChoice': imgSet +'_' +  allImages[5]},
                    'lowloss': {'optimalChoice': imgSet + '_' + allImages[6], 'suboptimalChoice': imgSet + '_' + allImages[7]}
            }

            logging.info('Cue Pairs: %s' % cuePairs)
            expInfo['cuePairs'] = cuePairs
            with open(jsonfile, 'w') as f:
                f.write(json.dumps(cuePairs, sort_keys=True, indent=4))
      Begin Routine:
        logging.info("Iterating through thisTrial")
        for value in trials.trialList:
            logging.info(value)

        # update component parameters for each repeat
        optimalImg = cuePairs[condition]['optimalChoice']
        suboptimalImg = cuePairs[condition]['suboptimalChoice']
        currentLoop.addData('optimalImg', optimalImg)
        currentLoop.addData('suboptimalImg', suboptimalImg)


        # Assumes button box responses are '1' for index and '2' for middle finger.
        if np.random.uniform() > 0.5:
            cuePositions = {responseKeys['left']:optimalImg, responseKeys['right']:suboptimalImg}

        else:
            cuePositions =  {responseKeys['left']:suboptimalImg, responseKeys['right']:optimalImg}

        sidePositions = dict([(v, k) for (k, v) in cuePositions.items()])

        optimalSide='left' if sidePositions[optimalImg]==responseKeys['left'] else 'right'
        suboptimalSide='left' if sidePositions[suboptimalImg]==responseKeys['left'] else 'right'

        currentLoop.addData('optimalSide', optimalSide)
        currentLoop.addData('suboptimalSide', suboptimalSide)
        currentLoop.addData('optimalResponse',sidePositions[optimalImg])
        currentLoop.addData('suboptimalResponse',sidePositions[suboptimalImg])
        leftImage = 'stimuli_sets/'+cuePositions[responseKeys['left']]
        currentLoop.addData('leftImage', leftImage)
        rightImage = 'stimuli_sets/'+cuePositions[responseKeys['right']]
        currentLoop.addData('rightImage', rightImage)

        # Set the "correct" response by choosing the one that will give the better outcome.
        # That's a higher probability of winning in gain conditions and a lower probability
        # of losing in loss conditions. Used for analysis, not for choosing outcomes.
        correct = sidePositions[optimalImg]
      End Routine:
        if cueResp.keys == responseKeys['left']:
            currentLoop.addData('optedSide', 'left')
            currentLoop.addData('optedImg', leftImage)

        elif cueResp.keys == responseKeys['right']:
            currentLoop.addData('optedSide', 'right')
            currentLoop.addData('optedImg', rightImage)

        else:
            currentLoop.addData('optedSide', 'NA')
            currentLoop.addData('optedImg', 'NA')
    CodeComponent frameLabels
      Code Type = Auto->JS
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      Begin Experiment:
        topLabel=None
        bottomLabel=None
        framecolor=None

        topFrameText = visual.TextStim(win=win, name='topFrameText',
            text='',
            font='Arial',
            pos=(0, 5.5), draggable=False, height=0.7, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-10.0);
        bottomFrameText = visual.TextStim(win=win, name='bottomFrameText',
            text='',
            font='Arial',
            pos=(0, -5.5), draggable=False, height=0.7, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-11.0);
      Begin Routine:
        if condition == "lowgain":
            corrvalue=0.20
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "highgain":
            corrvalue=1.00
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "lowloss":
            corrvalue=0
            incorrvalue=-0.20
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))

        if condition == "highloss":
            corrvalue=0
            incorrvalue=-1.00
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))

        topFrameText.setText(topLabel)
        topFrameText.status = NOT_STARTED
        bottomFrameText.setText(bottomLabel)
        bottomFrameText.status = NOT_STARTED
      Each Frame:
        if t > .5 and topFrameText.status == NOT_STARTED:
            topFrameText.setAutoDraw(True)
            bottomFrameText.setAutoDraw(True)
            topFrameText.status = STARTED
      End Routine:
        topFrameText.status = NOT_STARTED
    CodeComponent setImageTiming
      Code Type = Auto->JS
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      Begin Routine:
        cueTimeAdded = False
        responseTimeAdded = False
        feedbackTimeAdded = False
        currentLoop.addData('startFixOnTime', fmriClock.getTime())
      Each Frame:
        if not cueTimeAdded:
            if leftCue.autoDraw==True:
                currentLoop.addData('cueOnTime', fmriClock.getTime())
                cueTimeAdded = True

        #if not chooseTimeAdded and chooseText.status == STARTED:
        #    currentLoop.addData('chooseTime', fmriClock.getTime())
        #    chooseTimeAdded = True
        if not responseTimeAdded and len(cueResp.keys):
            currentLoop.addData('responseTime', fmriClock.getTime())
            responseTimeAdded = True
      End Routine:
        currentLoop.addData('cueOffTime', fmriClock.getTime())
    StaticComponent staticISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent manageTrialsLoop
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        expInfo['expStartTime'] = time.ctime()

        TRIAL_DURATION = 10
        trialsClock = core.Clock()
      Begin Routine:
        trialsClock.reset()
    CodeComponent selectionIndicatorCode
      Code Type = Auto->JS
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      Begin Experiment:
        selectionDuration = 3

        def selectionPosition(response):
            '''Set position of selectionCue'''
            side = .75 if response == responseKeys['right'] else -.75  # For fMRI, button 1 == left and button 2 == right, so positive will shift right and negative will shift left
            return [side * 180,0]

        # Cue Choice Indicator
        selectionIndicator = visual.Polygon(win, edges =4, ori=45, radius=180,
                                        name = 'selectionIndicator',
                                        lineColor = 'white', fillColor=None,
                                        units ='pix', lineWidth=3, interpolate=True)

        Choice=None
      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.
        cueEndTime = 3
        selectionIndicator.status = NOT_STARTED
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t > cueEndTime:
            continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if cueResp.keys and selectionIndicator.status == NOT_STARTED:
            cueComponents.append(selectionIndicator)
            selectionIndicator.status = STARTED
            selectionIndicator.setPos(selectionPosition(cueResp.keys))
            selectionIndicator.setAutoDraw(True)
            #if getSnapshots: win.getMovieFrame()
            # Set End Time, clip to end of trial length (4 sec max)
            # Don't worry about end of selection display in fMRI
            #cueEndTime = t + selectionDuration
  Routine outcomeDelayRoutine
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    TextComponent outcomeDelayFix
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
      text = +
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  Routine outcomeRoutine
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    CodeComponent rightChoice
      Code Type = Auto->JS
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      Begin Experiment:
        Accuracy = None
      Begin Routine:
        if cueResp.keys==sidePositions[optimalImg]:
            Choice="optimal"
        elif cueResp.keys==sidePositions[suboptimalImg]:
            Choice="suboptimal"
        else:
            Choice="NA"

        Accuracy=cueResp.corr

        currentLoop.addData('optedFor', Choice)
        currentLoop.addData('accuracy', Accuracy)
    CodeComponent defineOutcomes
      Code Type = Auto->JS
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      Begin Experiment:
        bank = 0
        def choose_outcome_from_cue(response):
            '''Choose an outcome to display (if True, then the trial action will occur, if False it won't)
            by setting a high or low threshold based on the response and image chosen, and then
            see if a random "roll" exceeds the threshold.

             The roll must be greater than threshold to return True, so a high probability will have a low
             threshold, and vice versa.'''

            if sidePositions[optimalImg] == cueResp.keys:
                return True if (optcorrect==1) else False
            elif sidePositions[suboptimalImg] == cueResp.keys:
                return True if (optcorrect==0) else False

        Accuracy_OptChoice=None
      Begin Routine:
        if condition == 'highgain':
            trueOperator = "+"
            falseOperator = "+"
        elif condition == 'lowgain':
            trueOperator = "+"
            falseOperator= "+"
        elif condition == 'highloss':
            trueOperator = "-"
            falseOperator= "-"
        else: # condition == 'lowloss'
        #    operator = ""
            trueOperator = "-"
            falseOperator = "-"
        if cueResp.keys:
            outcome = choose_outcome_from_cue(cueResp)
            currentLoop.addData('outcome', outcome)
            if outcome:
                # If the outcome was true, display the change.
                # Format prettily using the operator instead of just using the change value.
                change = corrvalue
                outcome_msg = "%s$%.2f\nCorrect"%(trueOperator, abs(change))
                outcome_image = None
                Feedback=1

            else:
                # If outcome was False, the trial doesn't change anything.
                # Still display the operator for trial condition
                change = incorrvalue
                outcome_msg = "%s$%.2f\nIncorrect" % (falseOperator,abs(change))
                outcome_image = None
                Feedback=0
        else: # give incorrect outcome for missed trials
            change = incorrvalue
            currentLoop.addData('outcome', None)
            outcome_msg = "%s$%.2f\nMissed" % (falseOperator,abs(change))
            outcome_image = None
            Feedback="NA"



        # Add a positive or negative change
        bank += change

        currentLoop.addData('Feedback', Feedback)
        currentLoop.addData('gainLossAmount', change)
        currentLoop.addData('runningBankTotal', bank)
        currentLoop.addData('feedbackTime', fmriClock.getTime())
      End Routine:
        expInfo['bank'] = bank
        currentLoop.addData('feedbackOffTime', fmriClock.getTime())
    CodeComponent frameLabelsOff
      Code Type = Auto->JS
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      End Routine:
        topFrameText.setAutoDraw(False)
        bottomFrameText.setAutoDraw(False)
    TextComponent outcomeText
      letterHeight = 1.75
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome_msg
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  Routine pracCue
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    ImageComponent pracLeftImg
      image [set every repeat] = $leftImgPath
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent pracRightImg
      image [set every repeat] = $rightImgPath
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent pracResp
      allowedKeys = allowedKeys
      correctAns = $PracCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    CodeComponent setRepeatsCode
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo["practice"] == "yes":
            pracOn = 1
        else:
            pracOn = 0
    CodeComponent selectionCode
      Code Type = Auto->JS
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      Begin Experiment:
        selectionDuration = 2.5

        def selectionPosition(response):
            '''Set position of selectionCue'''
            side = .75 if response == responseKeys['right'] else -.75  # For fMRI, button 1 == left and button 2 == right, so positive will shift right and negative will shift left
            return [side * 180,0]

        # Cue Choice Indicator
        selectionIndicatorPrac = visual.Polygon(win, edges =4, ori=45, radius=180,
                                        name = 'selectionIndicatorPrac',
                                        lineColor = 'white', fillColor=None,
                                        units ='pix', lineWidth=3, interpolate=True)

        Choice=None
      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.
        cueEndTime = 2.5
        selectionIndicatorPrac.status = NOT_STARTED
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t > cueEndTime:
            continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if pracResp.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(pracResp.keys))
            selectionIndicatorPrac.setAutoDraw(True)
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)
        print(pracResp.corr == 1)
  Routine pracJitter
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    TextComponent pracFix
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
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    CodeComponent outcomeCode
      Code Type = Auto->JS
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      Begin Experiment:
        pracOutcome = None
      Begin Routine:
        if pracResp.keys:
            if pracResp.keys == PracCorrect[practice.thisN]:
                pracOutcome = "Correct!"
            else:
                pracOutcome = "Incorrect!"
        else:
            pracOutcome = "Missed"
  Routine pracOut
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    TextComponent pracOutText
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pracOutcome
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    TextComponent pracOutFix
      letterHeight = 1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine introDir
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    TextComponent pracDirText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = In this game, your job is to find the correct picture. Sometimes, you might have to guess. During the game, the correct picture might change. Try to choose the picture that is correct most of the time.
      wrapWidth = 30
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    KeyboardComponent advanceScreenPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent initializeVarCode
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        #are we doing practice
        if(expInfo["practice"] == "yes"):
            pracBlockRepeats = 1
        else:
            pracBlockRepeats = 0

        #pilot mode (on computer) vs scan mode in scanner
        if(expInfo["mode"] == "pilot" or expInfo["mode"] == "orientation"):
            leftKey = "left"
            rightKey = "right"
            responseKeys = dict(left = 'left', right = 'right')
            allowedKeys = ['left','right']
            PracCorrect = ["left", "left", "right", "right", "left", "right",
                            "left", "left", "left", "right", "right", "left",
                            "right", "left", "left"]
        else:
            leftKey = "2"
            rightKey = "3"
            responseKeys = dict(left = '2', right = '3')
            allowedKeys = ['2','3']
            PracCorrect = ["2", "2", "3", "3", "2", "3", "2", "2", "2", "3", "3", "2", "3", "2", "2"]



        #what is the participant's version
        if(not("pilot" in expInfo["participant"]) and not("OS" in expInfo["participant"])):
            version_df = pd.read_csv("stimuli_sets/which_vers.csv")
            version = version_df.loc[version_df['Participant'] == int(expInfo['participant']), expInfo['session']].values[0]
        else:
            if("pilot" in expInfo["participant"]):
                id_vers = int(expInfo["participant"][6:]) % 4
            else:
                id_vers = int(expInfo["participant"][3:]) % 4
            print(id_vers)
            if id_vers == 0:
                version = "A"
            elif id_vers == 1:
                version = "B"
            elif id_vers == 2:
                version = "C"
            else:
                version = "D"
  Routine pracDir1
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    TextComponent choiceDirText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        There will be two pictures on the screen, one on the left and one on the right. Press the button with your pointer finger to choose the picture on the left, and press the button with your middle finger to choose the picture on the right. The pictures will change sides, but this does not affect whether or not the picture is correct.










        Make your choice as fast as you can. Once you choose, a box will show up on the screen. If you choose too late, your choice will not count.

        Practice selecting an image now by pressing with either finger.
    ImageComponent prac2Image
      image = stimuli_sets/prac2.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent prac1Image
      image = stimuli_sets/prac1.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent selectionPracticeCode
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if pracPress.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(pracPress.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)
    KeyboardComponent pracPress
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine pracDir2
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    TextComponent fixDirText
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        After you make a choice, you will see a + on the screen for a few seconds. Next, you will get feedback telling you if you are correct or incorrect.





        Do you have any questions?

        Press space bar to start the practice.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine done
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    TextComponent endExperiment
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = You finished the game!
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    KeyboardComponent endTaskPress
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac2Cue
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    ImageComponent prac2LeftCue
      image [set during: prac2Cue.ISI] = $leftImage
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    ImageComponent prac2RightCue
      image [set during: prac2Cue.ISI] = $rightImage
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent prac2Resp
      allowedKeys = allowedKeys
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    CodeComponent setCuesPrac
      Code Type = Auto->JS
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      Begin Experiment:
        cuePairPrac = {
            'highgain': {'optimalChoice':  'prac1.png', 'suboptimalChoice': 'prac2.png'},
            'lowgain': {'optimalChoice': 'prac3.png', 'suboptimalChoice': 'prac4.png'},
            'highloss': {'optimalChoice': 'prac5.png', 'suboptimalChoice': 'prac6.png'},
            'lowloss': {'optimalChoice': 'prac7.png', 'suboptimalChoice': 'prac8.png'}
        }
      Begin Routine:
        logging.info("Iterating through thisTrial")
        for value in practice2.trialList:
            logging.info(value)

        # update component parameters for each repeat
        optimalImg = cuePairPrac[condition]['optimalChoice']
        suboptimalImg = cuePairPrac[condition]['suboptimalChoice']
        currentLoop.addData('optimalImg', optimalImg)
        currentLoop.addData('suboptimalImg', suboptimalImg)


        # Assumes button box responses are '1' for index and '2' for middle finger.
        if np.random.uniform() > 0.5:
            cuePositions = {responseKeys['left']:optimalImg, responseKeys['right']:suboptimalImg}

        else:
            cuePositions =  {responseKeys['left']:suboptimalImg, responseKeys['right']:optimalImg}

        sidePositions = dict([(v, k) for (k, v) in cuePositions.items()])

        optimalSide='left' if sidePositions[optimalImg]==responseKeys['left'] else 'right'
        suboptimalSide='left' if sidePositions[suboptimalImg]==responseKeys['left'] else 'right'

        currentLoop.addData('optimalSide', optimalSide)
        currentLoop.addData('suboptimalSide', suboptimalSide)
        currentLoop.addData('optimalResponse',sidePositions[optimalImg])
        currentLoop.addData('suboptimalResponse',sidePositions[suboptimalImg])
        leftImage = 'stimuli_sets/'+cuePositions[responseKeys['left']]
        currentLoop.addData('leftImage', leftImage)
        rightImage = 'stimuli_sets/' +cuePositions[responseKeys['right']]
        currentLoop.addData('rightImage', rightImage)
        print(leftImage)
        print(rightImage)

        # Set the "correct" response by choosing the one that will give the better outcome.
        # That's a higher probability of winning in gain conditions and a lower probability
        # of losing in loss conditions. Used for analysis, not for choosing outcomes.
        correct = sidePositions[optimalImg]
      End Routine:
        if prac2Resp.keys == responseKeys['left']:
            currentLoop.addData('optedSide', 'left')
            currentLoop.addData('optedImg', leftImage)

        elif prac2Resp.keys == responseKeys['right']:
            currentLoop.addData('optedSide', 'right')
            currentLoop.addData('optedImg', rightImage)

        else:
            currentLoop.addData('optedSide', 'NA')
            currentLoop.addData('optedImg', 'NA')
    CodeComponent pracSelect
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.
        cueEndTime = 3
        selectionIndicator.status = NOT_STARTED
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t > cueEndTime:
            continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if prac2Resp.keys and selectionIndicator.status == NOT_STARTED:
            #cueComponents.append(selectionIndicator)
            selectionIndicator.status = STARTED
            selectionIndicator.setPos(selectionPosition(prac2Resp.keys))
            selectionIndicator.setAutoDraw(True)
            #if getSnapshots: win.getMovieFrame()
            # Set End Time, clip to end of trial length (4 sec max)
            # Don't worry about end of selection display in fMRI
            #cueEndTime = t + selectionDuration
      End Routine:
        selectionIndicator.setAutoDraw(False)
    StaticComponent ISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent pracFrameLabels
      Code Type = Auto->JS
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      Begin Experiment:
        topLabel=None
        bottomLabel=None
        framecolor=None

        topFrameText = visual.TextStim(win=win, name='topFrameText',
            text='',
            font='Arial',
            pos=(0, 5.5), draggable=False, height=0.7, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-10.0);
        bottomFrameText = visual.TextStim(win=win, name='bottomFrameText',
            text='',
            font='Arial',
            pos=(0, -5.5), draggable=False, height=0.7, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-11.0);
      Begin Routine:
        if condition == "lowgain":
            corrvalue=0.20
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "highgain":
            corrvalue=1.00
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "lowloss":
            corrvalue=0
            incorrvalue=-0.20
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))

        if condition == "highloss":
            corrvalue=0
            incorrvalue=-1.00
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))

        topFrameText.setText(topLabel)
        topFrameText.status = NOT_STARTED
        bottomFrameText.setText(bottomLabel)
        bottomFrameText.status = NOT_STARTED
      Each Frame:
        if t > .5 and topFrameText.status == NOT_STARTED:
            topFrameText.setAutoDraw(True)
            bottomFrameText.setAutoDraw(True)
            topFrameText.status = STARTED
      End Routine:
        topFrameText.status = NOT_STARTED
  Routine prac2Jitter
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    TextComponent prac2Fix
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
      text = +
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  Routine prac2Out
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    CodeComponent pracRightChoice
      Code Type = Auto->JS
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      Begin Experiment:
        Accuracy = None
      Begin Routine:
        if prac2Resp.keys==sidePositions[optimalImg]:
            Choice="optimal"
        elif prac2Resp.keys==sidePositions[suboptimalImg]:
            Choice="suboptimal"
        else:
            Choice="NA"

        Accuracy=prac2Resp.corr

        currentLoop.addData('optedFor', Choice)
        currentLoop.addData('accuracy', Accuracy)
    CodeComponent definePracOut
      Code Type = Auto->JS
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      Begin Experiment:
        bank = 0
        def choose_prac_outcome_from_cue(response):
            '''Choose an outcome to display (if True, then the trial action will occur, if False it won't)
            by setting a high or low threshold based on the response and image chosen, and then
            see if a random "roll" exceeds the threshold.

             The roll must be greater than threshold to return True, so a high probability will have a low
             threshold, and vice versa.'''

            if sidePositions[optimalImg] == prac2Resp.keys:
                return True if (optcorrect==1) else False
            elif sidePositions[suboptimalImg] == prac2Resp.keys:
                return True if (optcorrect==0) else False

        Accuracy_OptChoice=None
      Begin Routine:
        if condition == 'highgain':
            trueOperator = "+"
            falseOperator = "+"
        elif condition == 'lowgain':
            trueOperator = "+"
            falseOperator= "+"
        elif condition == 'highloss':
            trueOperator = "-"
            falseOperator= "-"
        else: # condition == 'lowloss'
        #    operator = ""
            trueOperator = "-"
            falseOperator = "-"
        if prac2Resp.keys:
            outcome = choose_prac_outcome_from_cue(prac2Resp)
            currentLoop.addData('outcome', outcome)
            if outcome:
                # If the outcome was true, display the change.
                # Format prettily using the operator instead of just using the change value.
                change = corrvalue
                outcome_msg = "%s$%.2f\nCorrect"%(trueOperator, abs(change))
                outcome_image = None
                Feedback=1

            else:
                # If outcome was False, the trial doesn't change anything.
                # Still display the operator for trial condition
                change = incorrvalue
                outcome_msg = "%s$%.2f\nIncorrect" % (falseOperator,abs(change))
                outcome_image = None
                Feedback=0
        else: # give incorrect outcome for missed trials
            change = incorrvalue
            currentLoop.addData('outcome', None)
            outcome_msg = "%s$%.2f\nMissed" % (falseOperator,abs(change))
            outcome_image = None
            Feedback="NA"



        # Add a positive or negative change
        bank += change

        currentLoop.addData('Feedback', Feedback)
        currentLoop.addData('gainLossAmount', change)
        currentLoop.addData('runningBankTotal', bank)
        currentLoop.addData('feedbackTime', fmriClock.getTime())
      End Routine:
        expInfo['bank'] = bank
        currentLoop.addData('feedbackOffTime', fmriClock.getTime())
    CodeComponent frameOff
      Code Type = Auto->JS
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      End Routine:
        topFrameText.setAutoDraw(False)
        bottomFrameText.setAutoDraw(False)
    TextComponent outcomePracText
      letterHeight = 1.75
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome_msg
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  Routine check1
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    TextComponent check1Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now. If you don't know, press the down-arrow key.
    ImageComponent check1ImageLeft
      image = stimuli_sets/prac2.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check1ImageRight
      image = stimuli_sets/prac1.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check1Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check1Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check1Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)

        if(check1Press.keys == "right"):
            currentLoop.addData('check1', "correct")
        else:
            currentLoop.addData('check1', "incorrect")
    KeyboardComponent check1Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent down1
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check2
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    TextComponent check2Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now. If you don't know, press the down-arrow key.
    ImageComponent check2ImageLeft
      image = stimuli_sets/prac2.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check2ImageRight
      image = stimuli_sets/prac1.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check2Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check2Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check2Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)
        if(check2Press.keys == "right"):
            currentLoop.addData('check2', "correct")
        else:
            currentLoop.addData('check2', "incorrect")
    KeyboardComponent check2Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent down3
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check3
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    TextComponent check3Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now. If you don't know, press the down-arrow key.
    ImageComponent check3ImageLeft
      image = stimuli_sets/prac3.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check3ImageRight
      image = stimuli_sets/prac4.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check3Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.
        frame.setAutoDraw(False)
        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check3Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check3Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)

        if(check3Press.keys == "left"):
            currentLoop.addData('check3', "correct")
        else:
            currentLoop.addData('check3', "incorrect")
    KeyboardComponent check3Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent down2
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check4
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    TextComponent check4Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now. If you don't know, press the down-arrow key.
    ImageComponent check4ImageLeft
      image = stimuli_sets/prac5.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check4ImageRight
      image = stimuli_sets/prac6.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check4Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check4Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check4Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)
        if(check4Press.keys == "left"):
            currentLoop.addData('check4', "correct")
        else:
            currentLoop.addData('check4', "incorrect")
    KeyboardComponent check4Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent down4
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check5
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    TextComponent check5Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now. If you don't know, press the down-arrow key.
    ImageComponent check5ImageLeft
      image = stimuli_sets/prac7.png
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check5ImageRight
      image = stimuli_sets/prac8.png
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check5Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check5Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check5Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)
        if(check5Press.keys == "left"):
            currentLoop.addData('check5', "correct")
        else:
            currentLoop.addData('check5', "incorrect")
    KeyboardComponent check5Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent down5
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase2Dir
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    TextComponent phase2Instruc
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Now, when you play the game, you can win money.

        You will see 4 different choice pairs. Each pair can win or lose a different amount.

        Press the space bar to proceed.
    KeyboardComponent phase2Press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check6
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    TextComponent check6Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now.
    ImageComponent check6ImageLeft
      image [set every repeat] = $hg1Img
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check6ImageRight
      image [set every repeat] = $hg2Img
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check6Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check6Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check6Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)

        if(check6Press.keys == "left"):
            currentLoop.addData('check6', "correct")
        else:
            currentLoop.addData('check6', "incorrect")
    KeyboardComponent check6Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine check7
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    TextComponent check7Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now.
    ImageComponent check7ImageLeft
      image [set every repeat] = $lg1Img
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check7ImageRight
      image [set every repeat] = $lg2Img
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check7Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check7Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check7Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)



        if(check7Press.keys == "right"):
            currentLoop.addData('check7', "correct")
        else:
            currentLoop.addData('check7', "incorrect")
    KeyboardComponent check7Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine check8
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    TextComponent check8Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now.
    ImageComponent check8ImageLeft
      image [set every repeat] = $hl1Img
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check8ImageRight
      image [set every repeat] = $hl2Img
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check8Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check8Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check8Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)

        if(check8Press.keys == "right"):
            currentLoop.addData('check8', "correct")
        else:
            currentLoop.addData('check8', "incorrect")
    KeyboardComponent check8Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine check9
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    TextComponent check9Text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Which image was correct most of the time?








        Select the image now.
    ImageComponent check9ImageLeft
      image [set every repeat] = $ll1Img
      pos = (-4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    ImageComponent check9ImageRight
      image [set every repeat] = $ll2Img
      pos = (4, 0)
      size = (7, 7)
      startVal [time (s)] = 0.0
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    CodeComponent check9Select
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.

        selectionIndicatorPrac.status = NOT_STARTED
        t_started = False
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t_started:
            if t > t_started + 5:
                continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if check9Press.keys and selectionIndicatorPrac.status == NOT_STARTED:
            #cueComponents.append(selectionIndicatorPrac)
            selectionIndicatorPrac.status = STARTED
            selectionIndicatorPrac.setPos(selectionPosition(check9Press.keys))
            selectionIndicatorPrac.setAutoDraw(True)
            t_started = core.Clock().getTime()
      End Routine:
        selectionIndicatorPrac.setAutoDraw(False)

        if(check9Press.keys == "left"):
            currentLoop.addData('check9', "correct")
        else:
            currentLoop.addData('check9', "incorrect")
    KeyboardComponent check9Press
      allowedKeys = allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine introDir
  LoopInitiator pracBlock loopType="TrialHandler"
    loopType = random
    nReps = pracBlockRepeats
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    Routine pracDir1
    Routine pracDir2
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = conditions/practiceTrials.xlsx
      loopType = sequential
      nReps = pracOn
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      conditions:
        [{'Trial': 1, 'leftImgPath': 'stimuli_sets/prac1.png', 'rightImgPath': 'stimuli_sets/prac2.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 2, 'leftImgPath': 'stimuli_sets/prac1.png', 'rightImgPath': 'stimuli_sets/prac2.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 3, 'leftImgPath': 'stimuli_sets/prac2.png', 'rightImgPath': 'stimuli_sets/prac1.png', 'PracCorrectScan': 3, 'PracCorrectPilot': 'right'},
        {'Trial': 4, 'leftImgPath': 'stimuli_sets/prac2.png', 'rightImgPath': 'stimuli_sets/prac1.png', 'PracCorrectScan': 3, 'PracCorrectPilot': 'right'},
        {'Trial': 5, 'leftImgPath': 'stimuli_sets/prac1.png', 'rightImgPath': 'stimuli_sets/prac2.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 6, 'leftImgPath': 'stimuli_sets/prac2.png', 'rightImgPath': 'stimuli_sets/prac1.png', 'PracCorrectScan': 3, 'PracCorrectPilot': 'right'},
        {'Trial': 7, 'leftImgPath': 'stimuli_sets/prac2.png', 'rightImgPath': 'stimuli_sets/prac1.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 8, 'leftImgPath': 'stimuli_sets/prac1.png', 'rightImgPath': 'stimuli_sets/prac2.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 9, 'leftImgPath': 'stimuli_sets/prac1.png', 'rightImgPath': 'stimuli_sets/prac2.png', 'PracCorrectScan': 2, 'PracCorrectPilot': 'left'},
        {'Trial': 10, 'leftImgPath': 'stimuli_sets/prac2.png', 'rightImgPath': 'stimuli_sets/prac1.png', 'PracCorrectScan': 3, 'PracCorrectPilot': 'right'}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
      Routine pracCue
      Routine pracJitter
      Routine pracOut
    LoopTerminator practice
    Routine check1
    Routine phase2Dir
    Routine gainDirs
    Routine lossDirs
    LoopInitiator practice2 loopType="TrialHandler"
      conditionsFile = conditions/prac2Trials.csv
      loopType = sequential
      nReps = pracOn
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      conditions:
        [OrderedDict([('trialOrder', 1), ('condition', 'highgain'), ('fixationDuration', 1.0), ('outcomeDelay', 2.5), ('optcorrect', 1), ('CBDrifts', 'Drift2'), ('CondOrder', 12)]),
        OrderedDict([('trialOrder', 2), ('condition', 'highloss'), ('fixationDuration', 2.0), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 7)]),
        OrderedDict([('trialOrder', 3), ('condition', 'highloss'), ('fixationDuration', 1.0), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 14)]),
        OrderedDict([('trialOrder', 4), ('condition', 'lowgain'), ('fixationDuration', 1.0), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift3'), ('CondOrder', 11)]),
        OrderedDict([('trialOrder', 5), ('condition', 'lowloss'), ('fixationDuration', 1.5), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift1'), ('CondOrder', 3)])]
      Routine prac2Cue
      Routine prac2Jitter
      Routine prac2Out
    LoopTerminator practice2
    Routine check3
    Routine check2
    Routine check4
    Routine check5
  LoopTerminator pracBlock
  Routine summaryDirections
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = conditions/Runs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Runs': 'Run1'},
      {'Runs': 'Run2'},
      {'Runs': 'Run3'},
      {'Runs': 'Run4'}]
    Routine getReady
    Routine waitForScanner
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trialOrder
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.5), ('outcomeDelay', 2.5), ('optcorrect', 0), ('CBDrifts', 'Drift3'), ('CondOrder', 1), ('trialOrder', 1)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.0), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift3'), ('CondOrder', 2), ('trialOrder', 2)]),
        OrderedDict([('condition', 'highgain'), ('fixationDuration', 2.0), ('outcomeDelay', 1.5), ('optcorrect', 0), ('CBDrifts', 'Drift1'), ('CondOrder', 1), ('trialOrder', 3)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.5), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift3'), ('CondOrder', 3), ('trialOrder', 4)]),
        OrderedDict([('condition', 'lowloss'), ('fixationDuration', 1.5), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 1), ('trialOrder', 5)]),
        OrderedDict([('condition', 'lowloss'), ('fixationDuration', 1.5), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 2), ('trialOrder', 6)]),
        OrderedDict([('condition', 'lowgain'), ('fixationDuration', 2.0), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift2'), ('CondOrder', 1), ('trialOrder', 7)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.0), ('outcomeDelay', 2.5), ('optcorrect', 0), ('CBDrifts', 'Drift3'), ('CondOrder', 4), ('trialOrder', 8)])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
      Routine cue
      Routine outcomeDelayRoutine
      Routine outcomeRoutine
      Routine fixation
    LoopTerminator trials
    Routine breakScreen
  LoopTerminator runs
  Routine check6
  Routine check7
  Routine check8
  Routine check9
  Routine done
