PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '["1", "2", "3", "4", "5", "6", "7", "8", "pilot-1", "pilot-2", "pilot-3", "pilot-4", "pilot-5", "pilot-6", "pilot-7", "pilot-8", "pilot-9", "pilot-10"]', 'session': '["ses-1", "ses-2", "ses-3", "ses-4", "ses-5", "ses-6", "ses-7", "ses-8"]', 'vers': 'A', 'mriMode': 'Scan', 'practice': 'no'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1728, 1117]
  color = $[-1,-1,-1]
  expName = reward_learning_task_multises2
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine getReady
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    TextComponent getReadyText
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Get Ready!
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    KeyboardComponent advanceToTrigger
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine waitForScanner
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    CodeComponent setRunFiles
      Code Type = Auto->JS
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      Begin Experiment:
        trialOrder = None
      Begin Routine:
        if Runs == 'Run1':
            trialOrder = milConditionsFile1
        if Runs == 'Run2':
            trialOrder = milConditionsFile2
        if Runs == 'Run3':
            trialOrder = milConditionsFile3
        if Runs == 'Run4':
            trialOrder = milConditionsFile4
    TextComponent waitScannerText
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Waiting for scanner (press 5 key to continue -- remove this later)
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    CodeComponent waitScannerCode
      Code Type = Auto->JS
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      Begin Experiment:

        waitForScannerClock = core.Clock()
        fmriClock = core.Clock()
        trigger = 'usb'
        '''
        #trigger = 'parallel'
        if trigger == 'parallel':
            from psychopy.contrib import parallel as winioport
            #from psychopy import parallel

        #import is failing
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan
            #
            # settings for launchScan:
            MR_settings = {
                'TR': 2, # duration (sec) per volume
                'volumes': 215, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
        '''
      Begin Routine:
        '''
        if expInfo['mriMode'] != 'Off':
            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                globalClock=fmriClock,
                mode=expInfo['mriMode'])
            elif trigger == 'parallel':
                address = 0x378
                #parallel.setPortAddress(0x378)
                wait_msg = "Waiting for scanner..."
                pinStatus = winioport.inp(address)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != winioport.inp(address):
                        break
                        # start exp when pin values change
                fmriClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received

        expInfo['triggerWallTime'] = time.ctime()

        '''
      End Routine:
        #routineTimer.reset()
    KeyboardComponent scannerTriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracDir
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    TextComponent pracDirText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        In this game, your job is to find the correct picture. Sometimes, you might have to guess. During the game, the correct picture might change. Try to choose the picture that is correct most of the time.

        There will be two pictures on the screen, one on the left and one on the right. Press the button with your pointer finger to choose the shape on the left, and press the button with your middle finger to choose the shape on the right. The shapes will change sides, but this does not affect whether or not the shape is correct.

        Make your choice as fast as you can. Once you choose, a box will show up on the screen. If you choose too late, your choice will not count.

        After you make a choice, you will see a + on the screen for a few seconds. Next, you will get feedback telling you if you are correct or incorrect.
    KeyboardComponent advanceScreenPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine summaryDirections
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    TextComponent summary
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Directions to remember:

        1. Try to choose the picture that gives you the best chance of winning money and avoiding losing money.

        2. Press the left button with your POINTER finger to select the image on the left side of the screen. Press the right button with your MIDDLE finger to select the image on the right side of the screen.

        3. The pictures will sometimes appear on opposite sides of the screen. This does not change whether they will win or lose.

        4. Make your choice when you see the pictures. If you choose after that, your response won't be counted.

        5. The money that you win in this task will be YOURS TO KEEP.'
    CodeComponent allowedKeysCode
      Code Type = Auto->JS
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      Begin Experiment:
        responseKeys = dict(left = '1', right = '2')
        allowedKeys = ['1','2']#responseKeys.values()
    CodeComponent conditionsFiles
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        #load img set
        if(not("pilot" in expInfo["participant"])):
            sets = pd.read_csv("stimuli_sets/which_set.csv")
            imgSet = sets.loc[sets['Participant'] == int(expInfo["participant"]), expInfo["session"]].values[0]

        else:
            id_num = expInfo["participant"][6:]
            imgSet = "set" + str(id_num)
        #load conditions
        milConditionsFile1 = 'conditions/MIL_stakes_cond' + version + '_block1.csv'
        milConditionsFile2 = 'conditions/MIL_stakes_cond' + version + '_block2.csv'
        milConditionsFile3 = 'conditions/MIL_stakes_cond' + version + '_block3.csv'
        milConditionsFile4 = 'conditions/MIL_stakes_cond' + version + '_block4.csv'

        logging.exp("Using conditions file: %s" % milConditionsFile1)
    KeyboardComponent advanceScreenPress4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracDirections3
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    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        After you make a choice, you will see a + on the screen for a few seconds. Next, you will get feedback telling you if you are correct or incorrect.





        Do you have any questions?

        Press space to start the practice.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracDirections2
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    TextComponent choiceDirText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        There will be two pictures on the screen, one on the left and one on the right. Press the button with your pointer finger to choose the picture on the left, and press the button with your middle finger to choose the picture on the right. The pictures will change sides, but this does not affect whether or not the picture is correct.

        Make your choice as fast as you can. Once you choose, a box will show up on the screen. If you choose too late, your choice will not count.

        Press the button now to make a choice.
    KeyboardComponent advanceScreenPress2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent prac2Image
      image = images/prac2.png
      pos = (-10, -10)
      size = (10, 10)
      startVal [time (s)] = 0.0
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    ImageComponent prac1Image
      image = images/prac1.png
      pos = (10, -10)
      size = (10, 10)
      startVal [time (s)] = 0.0
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    PolygonComponent selectionIndicator
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent pracRespPress
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent selectionBox
      Code Type = Auto->JS
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      Begin Routine:
        cueEndTime = 20
        selectionIndicator.status = NOT_STARTED
      Each Frame:
        # If the selection has been drawn for the seelection duration,
        # or if the trial should end (cutting of the selection duration)
        # end the routine

        if t > cueEndTime:
            continueRoutine = False
        # Start drawing the selection indicator if the
        # selection has been made

        if pracRespPress.keys and selectionIndicator.status == NOT_STARTED:
            pracDirections2Components.append(selectionIndicator)
            slectionIndicator.status = STARTED
            selectionIndicator.setPost(selectionPositions(pracResp_dirs.keys))
            selectionIndicator.setAutoDraw(True)
  Routine gainDirs
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    KeyboardComponent advanceScreenPress3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setFrameColors
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        if(not("pilot" in expInfo["participant"])):
            version_df = pd.read_csv("stimuli_sets/which_vers.csv")
            version = version_df.loc[version_df['Participant'] == int(expInfo['participant']), expInfo['session']].values[0]
        else:
            id_vers = int(expInfo["participant"][6:]) % 4
            if id_vers == 0:
                version = "A"
            elif id_vers == 1:
                version = "B"
            elif id_vers == 2:
                version = "C"
            else:
                version = "D"


        if expInfo['vers']=="A":
            highgainColor="Tomato"
            lowgainColor="DarkTurquoise"
            highlossColor="Gold"
            lowlossColor="DarkOrchid"

        if expInfo['vers']=="B":
            highgainColor="DarkTurquoise"
            lowgainColor="Gold"
            highlossColor="DarkOrchid"
            lowlossColor="Tomato"

        if expInfo['vers']=="C":
            highgainColor="DarkOrchid"
            lowgainColor="Tomato"
            highlossColor="DarkTurquoise"
            lowlossColor="Gold"

        if expInfo['vers']=="D":
            highgainColor="Gold"
            lowgainColor="DarkOrchid"
            highlossColor="Tomato"
            lowlossColor="DarkTurquoise"
    TextComponent frameDirText
      letterHeight = 1
      pos = (-5, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Sometimes you can win money during the game!

        For the HIGH WIN pair, you can win 50 cents if you are correct or win 0 cents if you are incorrect.

        For the LOW WIN pair, you can win 25 cents if you are correct or win 0 cents if you are incorrect.

        There will be a box around the pictures. The color of the box will tell you whether you can win a high or low amount.

        The money you win will be paid to you as bonus at the end of the game, so try your best!
    PolygonComponent highgainframe1_2
      fillColor = None
      lineColor [set every repeat] = $highgainColor
      pos = (8, 8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    PolygonComponent lowgainframe1_2
      fillColor = None
      lineColor [set every repeat] = $lowgainColor
      pos = (8, -8)
      shape = rectangle
      size = (8, 6)
      startVal [time (s)] = 0.0
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    TextComponent highgainTopLabel_2
      letterHeight = 1
      pos = (8.5, 8)
      startVal [time (s)] = 0.0
      text = "+$0.50"
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    TextComponent lowgainTopLabel_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = "+$0.25"
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    TextComponent highgainBottomLabel_2
      letterHeight = 1
      pos = (8.5, 8)
      startVal [time (s)] = 0.0
      text = "+$0.00"
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    TextComponent lowgainBottomLabel_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = "+$0.00"
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  Routine lossDirs
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    KeyboardComponent advanceScreen4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lossFrameDirections
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
  Routine Done
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    TextComponent endExperiment
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      text = You finished the game!
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    KeyboardComponent endTaskPress
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
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  Routine breakScreen
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    TextComponent breakText
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = You finished this round!
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    KeyboardComponent advanceScreenPress_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endRunTime
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('runOffTime', fmriClock.getTime())
  Routine fixation
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    TextComponent fixationCrosshair
      durationEstim = 2.99
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationDuration
      text = +
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    CodeComponent loopDurationCode
      Code Type = Auto->JS
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      Begin Routine:
        currentLoop.addData('fixationTime', fmriClock.getTime())
      End Routine:
        logging.exp("Measured Fixation Dureation: %f" % t)
        logging.exp("Trials Clock: %f" % trialsClock.getTime())
  Routine cue
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    TextComponent startFixStatic
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent setCues
      Code Type = Auto->JS
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      Begin Experiment:
        import json
        jsonfile = 'Subject_Data/' + expInfo['participant'] + '_' + expInfo['session'] +'.json'
        # Assign Cues to Condition or load previous set.
        if(os.path.exists(jsonfile)):
            with open(jsonfile,'r') as f:
                cuePairs = json.load(f)
        else:
            imageList = 'conditions/'+ 'PicList_'+ version + '.csv'
            print(imageList)
            with open(imageList, 'r') as f:
                allImages=[s.strip() for s in f.readlines()]
                cuePairs = {
                    'highgain': {'optimalChoice': imgSet + '_' + allImages[0], 'suboptimalChoice': imgSet + '_' +  allImages[1]},
                    'lowgain': {'optimalChoice': imgSet + '_' + allImages[2], 'suboptimalChoice': imgSet + '_' + allImages[3]},
                    'highloss': {'optimalChoice': imgSet + '_' + allImages[4], 'suboptimalChoice': imgSet +'_' +  allImages[5]},
                    'lowloss': {'optimalChoice': imgSet + '_' + allImages[6], 'suboptimalChoice': imgSet + '_' + allImages[7]}
            }

            logging.info('Cue Pairs: %s' % cuePairs)
            expInfo['cuePairs'] = cuePairs
            with open(jsonfile, 'w') as f:
                f.write(json.dumps(cuePairs, sort_keys=True, indent=4))
      Begin Routine:
        logging.info("Iterating through thisTrial")
        for value in trials.trialList:
            logging.info(value)

        # update component parameters for each repeat
        optimalImg = cuePairs[condition]['optimalChoice']
        suboptimalImg = cuePairs[condition]['suboptimalChoice']
        currentLoop.addData('optimalImg', optimalImg)
        currentLoop.addData('suboptimalImg', suboptimalImg)


        # Assumes button box responses are '1' for index and '2' for middle finger.
        if np.random.uniform() > 0.5:
            cuePositions = {responseKeys['left']:optimalImg, responseKeys['right']:suboptimalImg}

        else:
            cuePositions =  {responseKeys['left']:suboptimalImg, responseKeys['right']:optimalImg}

        sidePositions = dict([(v, k) for (k, v) in cuePositions.items()])

        optimalSide='left' if sidePositions[optimalImg]==responseKeys['left'] else 'right'
        suboptimalSide='left' if sidePositions[suboptimalImg]==responseKeys['left'] else 'right'

        currentLoop.addData('optimalSide', optimalSide)
        currentLoop.addData('suboptimalSide', suboptimalSide)
        currentLoop.addData('optimalResponse',sidePositions[optimalImg])
        currentLoop.addData('suboptimalResponse',sidePositions[suboptimalImg])
        leftImage = 'stimuli_sets/'+cuePositions[responseKeys['left']]
        currentLoop.addData('leftImage', leftImage)
        rightImage = 'stimuli_sets/'+cuePositions[responseKeys['right']]
        currentLoop.addData('rightImage', rightImage)

        # Set the "correct" response by choosing the one that will give the better outcome.
        # That's a higher probability of winning in gain conditions and a lower probability
        # of losing in loss conditions. Used for analysis, not for choosing outcomes.
        correct = sidePositions[optimalImg]
    CodeComponent frameLabels
      Code Type = Auto->JS
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      Begin Experiment:
        topLabel=None
        bottomLabel=None
        framecolor=None
      Begin Routine:
        if condition == "lowgain":
            corrvalue=0.25
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "highgain":
            corrvalue=0.50
            incorrvalue=0
            topLabel="+$%.2f"%(abs(corrvalue))
            bottomLabel="+$%.2f"%(abs(incorrvalue))

        if condition == "lowloss":
            corrvalue=0
            incorrvalue=-0.25
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))

        if condition == "highloss":
            corrvalue=0
            incorrvalue=-0.5
            topLabel="-$%.2f"%(abs(corrvalue))
            bottomLabel="-$%.2f"%(abs(incorrvalue))
    PolygonComponent frame1
      fillColor = None
      lineWidth = 4
      shape = rectangle
      size = (20,13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent setImageTiming
      Code Type = Auto->JS
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      Begin Routine:
        cueTimeAdded = False
        responseTimeAdded = False
        feedbackTimeAdded = False
        currentLoop.addData('startFixOnTime', fmriClock.getTime())
      Each Frame:
        if not cueTimeAdded:
            if leftCue.autoDraw==True:
                currentLoop.addData('cueOnTime', fmriClock.getTime())
                cueTimeAdded = True
        #if not chooseTimeAdded and chooseText.status == STARTED:
        #    currentLoop.addData('chooseTime', fmriClock.getTime())
        #    chooseTimeAdded = True
        if not responseTimeAdded and len(cueResp.keys):
            currentLoop.addData('responseTime', fmriClock.getTime())
            responseTimeAdded = True
      End Routine:
        currentLoop.addData('cueOffTime', fmriClock.getTime())
    ImageComponent leftCue
      image [set during: cue.staticISI] = $leftImage
      pos = (-6, 0)
      size = (4, 4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    ImageComponent rightCue
      image [set during: cue.staticISI] = $rightImage
      pos = (6, 0)
      size = (4, 4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent cueResp
      allowedKeys = allowedKeys
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    StaticComponent staticISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent manageTrialsLoop
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        expInfo['expStartTime'] = time.ctime()

        TRIAL_DURATION = 10
        trialsClock = core.Clock()
      Begin Routine:
        trialsClock.reset()
    CodeComponent selectionIndicatorCode
      Code Type = Auto->JS
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      Begin Experiment:
        selectionDuration = 3

        def selectionPosition(response):
            '''Set position of selectionCue'''
            side = 1.1 if response == responseKeys['right'] else -1.1  # For fMRI, button 1 == left and button 2 == right, so positive will shift right and negative will shift left
            return [side * 180,0]

        # Cue Choice Indicator
        selectionIndicator = visual.Polygon(win, edges =4, ori=45, radius=150,
                                        name = 'selectionIndicator',
                                        lineColor = 'white', fillColor=None,
                                        units ='pix', lineWidth=2, interpolate=True)

        #vertices=[[0,0], [0,260], [260,260], [260,0]]

        Choice=None
      Begin Routine:
        # Initialize cue end time for cues and selection indicator.
        # If no response is made in this time, the trial ends.
        # Otherwise, cueEndTime is updated to response
        # time plus the selection duration.
        cueEndTime = 3
        selectionIndicator.status = NOT_STARTED
      Each Frame:
        # If the selection has been drawn for the selection duration,
        # or the trial should end (cutting off the selection duration), end the routine
        if t > cueEndTime:
            continueRoutine = False

        # Start Drawing Selection Indicator if Selection has been made
        if cueResp.keys and selectionIndicator.status == NOT_STARTED:
            cueComponents.append(selectionIndicator)
            selectionIndicator.status = STARTED
            selectionIndicator.setPos(selectionPosition(cueResp.keys))
            selectionIndicator.setAutoDraw(True)
            #if getSnapshots: win.getMovieFrame()
            # Set End Time, clip to end of trial length (4 sec max)
            # Don't worry about end of selection display in fMRI
            #cueEndTime = t + selectionDuration
    TextComponent topFrameText
      letterHeight = 0.5
      pos = (0, 4.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $topLabel
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    TextComponent bottomFrameText
      letterHeight = 0.5
      pos = (0, -4.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $bottomLabel
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  Routine outcomeDelayRoutine
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    PolygonComponent frame1Fix
      fillColor = None
      lineWidth = 2
      shape = rectangle
      size = (20, 13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
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    TextComponent outcomeDelayFix
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
      text = +
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    TextComponent topFrameTextFix
      letterHeight = 0.5
      pos = (0, 4.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
      text [set every repeat] = $topLabel
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    TextComponent bottomFrameTextFix
      letterHeight = 0.5
      pos = (0, -4.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $outcomeDelay
      text [set every repeat] = $bottomLabel
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  Routine outcomeRoutine
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    CodeComponent rightChoice
      Code Type = Auto->JS
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      Begin Experiment:
        Accuracy = None
      Begin Routine:
        if cueResp.keys==sidePositions[optimalImg]:
            Choice=1
        elif cueResp.keys==sidePositions[suboptimalImg]:
            Choice=2
        else:
            Choice="NA"

        Accuracy=cueResp.corr

        currentLoop.addData('Choice', Choice)
        currentLoop.addData('Accuracy', Accuracy)
    CodeComponent defineOutcomes
      Code Type = Auto->JS
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      Begin Experiment:
        bank = 0
        def choose_outcome_from_cue(response):
            '''Choose an outcome to display (if True, then the trial action will occur, if False it won't)
            by setting a high or low threshold based on the response and image chosen, and then
            see if a random "roll" exceeds the threshold.

             The roll must be greater than threshold to return True, so a high probability will have a low
             threshold, and vice versa.'''

            if sidePositions[optimalImg] == cueResp.keys:
                return True if (optcorrect==1) else False
            elif sidePositions[suboptimalImg] == cueResp.keys:
                return True if (optcorrect==0) else False

        Accuracy_OptChoice=None
      Begin Routine:
        if condition == 'highgain':
            trueOperator = "+"
            falseOperator = "+"
        elif condition == 'lowgain':
            trueOperator = "+"
            falseOperator= "+"
        elif condition == 'highloss':
            trueOperator = "-"
            falseOperator= "-"
        else: # condition == 'lowloss'
        #    operator = ""
            trueOperator = "-"
            falseOperator = "-"
        if cueResp.keys:
            outcome = choose_outcome_from_cue(cueResp)
            currentLoop.addData('outcome', outcome)
            if outcome:
                # If the outcome was true, display the change.
                # Format prettily using the operator instead of just using the change value.
                change = corrvalue
                outcome_msg = "%s$%.2f"%(trueOperator, abs(change))
                outcome_image = None
                Feedback=1

            else:
                # If outcome was False, the trial doesn't change anything.
                # Still display the operator for trial condition
                change = incorrvalue
                outcome_msg = "%s$%.2f" % (falseOperator,abs(change))
                outcome_image = None
                Feedback=0
        else: # give incorrect outcome for missed trials
            change = incorrvalue
            currentLoop.addData('outcome', None)
            outcome_msg = "%s$%.2f" % (falseOperator,abs(change))
            outcome_image = None
            Feedback="NA"



        # Add a positive or negative change
        bank += change

        currentLoop.addData('Feedback', Feedback)
        currentLoop.addData('trialChange', change)
        currentLoop.addData('runningBankTotal', bank)
        currentLoop.addData('feedbackTime', fmriClock.getTime())
      End Routine:
        expInfo['bank'] = bank
        currentLoop.addData('feedbackOffTime', fmriClock.getTime())
    TextComponent outcomeText
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome_msg
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Flow
  Routine pracDir
  LoopInitiator pracBlock loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine pracDirections2
    Routine pracDirections3
    Routine gainDirs
    Routine lossDirs
  LoopTerminator pracBlock
  Routine summaryDirections
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = conditions/Runs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Runs': 'Run1'},
      {'Runs': 'Run2'},
      {'Runs': 'Run3'},
      {'Runs': 'Run4'}]
    Routine getReady
    Routine waitForScanner
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trialOrder
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.5), ('outcomeDelay', 2.5), ('optcorrect', 0), ('CBDrifts', 'Drift3'), ('CondOrder', 1), ('trialOrder', 1)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.0), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift3'), ('CondOrder', 2), ('trialOrder', 2)]),
        OrderedDict([('condition', 'highgain'), ('fixationDuration', 2.0), ('outcomeDelay', 1.5), ('optcorrect', 0), ('CBDrifts', 'Drift1'), ('CondOrder', 1), ('trialOrder', 3)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.5), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift3'), ('CondOrder', 3), ('trialOrder', 4)]),
        OrderedDict([('condition', 'lowloss'), ('fixationDuration', 1.5), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 1), ('trialOrder', 5)]),
        OrderedDict([('condition', 'lowloss'), ('fixationDuration', 1.5), ('outcomeDelay', 2.0), ('optcorrect', 1), ('CBDrifts', 'Drift4'), ('CondOrder', 2), ('trialOrder', 6)]),
        OrderedDict([('condition', 'lowgain'), ('fixationDuration', 2.0), ('outcomeDelay', 1.5), ('optcorrect', 1), ('CBDrifts', 'Drift2'), ('CondOrder', 1), ('trialOrder', 7)]),
        OrderedDict([('condition', 'highloss'), ('fixationDuration', 1.0), ('outcomeDelay', 2.5), ('optcorrect', 0), ('CBDrifts', 'Drift3'), ('CondOrder', 4), ('trialOrder', 8)])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
      Routine cue
      Routine outcomeDelayRoutine
      Routine outcomeRoutine
      Routine fixation
    LoopTerminator trials
    Routine breakScreen
  LoopTerminator runs
  Routine Done
